CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '---', 'Settings converted from legacy pipeline.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['Electron microscopy TIF metadata:', 'ImageDescription: AMT Camera System', '9/5/2017', '3:57:04 PM', '2550', '7.0', '100.0', 'Imaging', 'MCK CNEB SOL HOM(T25635) CSA ', 'Block 5 100nm', '', '', '', '', '', 'XpixCal=45.288660', 'YpixCal=45.288660', 'Unit=um', '##fv3', '', 'The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', '---', 'Settings converted from legacy pipeline.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Regular expression:^(?P<Run>.+)_(?P<Well>[A-P][0-9]{1,2})_(?P<Wavelength>w[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Settings converted from legacy pipeline.', 'WARNING: the metadata matching for this pipeline may not have been converted correctly.', 'Please change any color images from "Load as Grayscale image" to "Load as Color image"']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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:EM
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '---', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:EM
    Name the output image:CropEM
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,end
    Top and bottom rectangle positions:0,1792
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    Remove empty rows and columns?:All
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
MeasureImageIntensity:[module_num:6|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
    Select the image to measure:CropEM
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:7|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notes:['Intensity normalization, peak of the histogram should be at a grey value of ~116.', '116/256=0.453125']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.453125
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:NormalizedEM
    Image or measurement?:Image
    Select the first image:CropEM
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MeanIntensity_CropEM

RescaleIntensity:[module_num:8|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
    Select the input image:NormalizedEM
    Name the output image:RescaledEM
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:9|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedEM
    Image or measurement?:Image
    Select the first image:RescaledEM
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:InvertedEM
    Name the primary objects to be identified:Mitochondria
    Typical diameter of objects, in pixel units (Min,Max):15,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:15
    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.7,0.9
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
EditObjectsManually:[module_num:11|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
    Select the objects to be edited:Mitochondria
    Name the edited objects:ManualMito
    Retain outlines of the edited objects?:Yes
    Name the outline image:ManualMitoOutlines
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:InvertedEM
    Allow overlapping objects?:No

SaveImages:[module_num:12|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
    Select the type of image to save:Objects
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    Select the objects to save:ManualMito
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    Select method for constructing file names:From image filename
    Select image name for file prefix:EM
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mito
    Saved file format:png
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Color
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:13|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
    Select objects to measure:Mitochondria
    Select objects to measure:ManualMito
    Calculate the Zernike features?:No

CalculateMath:[module_num:14|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notes:['Calculates the total area occupied by mitochondria.']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
    Name the output measurement:MitoTotal
    Operation:Multiply
    Select the first operand measurement type:Image
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    Select the first operand measurement:Count_Mitochondria
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the second operand measurement type:Object
    Select the second operand objects:Mitochondria
    Select the second operand measurement:AreaShape_Area
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1
    Add to the result:0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:15|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
    Name the output measurement:ManualMitoTotal
    Operation:Multiply
    Select the first operand measurement type:Image
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    Select the first operand measurement:Count_ManualMito
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the second operand measurement type:Object
    Select the second operand objects:ManualMito
    Select the second operand measurement:AreaShape_Area
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1
    Add to the result:0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|C:\\\\\\\\Temp
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    :ManualMito|Math_ManualMitoTotal
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:EM image analysis_
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:CropEM
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    Select method for constructing file names:From image filename
    Select image name for file prefix:EM
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_crop
    Saved file format:tif
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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